PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = intentional binding experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine beep
    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response_
    TextComponent text
      letterHeight = 0.05
      pos = (0,0.3)
      startVal [time (s)] = 0.0
      text = report the delay between the key press and the beeb sound {0-999}; Click submit after entering the value
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3,0.1)
      startVal [time (s)] = 0
      text = submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/mudit/Desktop/khushi/documents/IMPORTANT ASSIGMENTS RELATED TO PSYCHOLOGY/lab psychology/ib_cons.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'delay': 0.1, 'freq': 400, 'condition': 'unexp '},
      {'delay': 0.4, 'freq': 400, 'condition': 'unexp '},
      {'delay': 0.7, 'freq': 400, 'condition': 'unexp '},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': None, 'freq': None, 'condition': None}]
    Routine trial
    Routine beep
    Routine response_
  LoopTerminator trials
